OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

GDF file reader => #0
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Data/AmandaAlphaTest-[2016.11.15-19.10.26].gdf
  Samples per buffer = 50
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "EEG Data" => #1
  Channel List = 1:6
  Action = Select
  Channel Matching Method = Smart
#0.EEG stream -> Time based epoching
  Epoch 1 duration (in sec) = .2
  Epoch 1 intervals (in sec) = .2
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Keyboard stimulator => #5
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Config/KeyboardConfigTraining.txt
Signal=#1, Stimulation=#5 -> GDF file writer
  Filename = C:/Users/Amanda/Desktop/temp.gdf
Data=#1, Stimulations=#5 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
