OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "EEG Data" => #1
  Channel List = 1:6
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 29
  Pass band ripple (dB) = 0.5
#1 -> 0xc67a01dc CSV File Writer
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Data/Train-Participant-07-[$core{date}-$core{time}].csv
  Column separator = ;
  Precision = 10
Keyboard stimulator => #4
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Config/KeyboardConfigTraining.txt
Experiment information=#0.Experiment information, Signal=#1, Stimulation=#4 -> GDF file writer
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Data/Train-Participant-07-[$core{date}-$core{time}].gdf
Experiment information=#0.Experiment information, Signal=#1, Stimulations=#4 -> EDF File Writer
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Data/Train-Participant-07-[$core{date}-$core{time}].edf
Data=#2, Stimulations=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
