OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.2)

GDF file reader => #0
  Filename = C:/Users/Amanda/Documents/MATLAB/Emotions/OpenVibe Data/AmandaAlphaTest-[2016.11.15-19.10.26].gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "EEG Data" => #1
  Channel List = 1:6
  Action = Select
  Channel Matching Method = Smart
0xc67a01dc Keyboard stimulator => #2
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal=#1, Stimulation=#2 -> GDF file writer
  Filename = C:/Users/Amanda/Desktop/temp.gdf
Data=#1, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
